/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "24150",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "55479",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
}
