/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "26614"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "12176"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "55479"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "24150"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM2",
            "configure-parameter": {
                "scale": 0.2
            }
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM1",
            "configure-parameter": {
                "scale": 0.2
            }
        }
    ]
}
