/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals-Second-Console.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "12176"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "12345"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM2",
            "configure-parameter": {
                "scale": 0.2
            }
        }
    ]
}
