
{
	"arms":
    [
		{
            "name": "ECM",
            "type": "ECM",
            "simulation": "KINEMATIC",
            "pid": "../sawControllersPID-ECM.xml",
            "kinematic": "../ecm-straight.json"
        }
		,
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-foot-pedal-36497.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }
    ]
}
