/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-foot-pedal-34180.xml",
            "pid": "../sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "simulation": "KINEMATIC",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }
    ]
}
