/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            // to use derived teleop with force feedback
            {
                "shared-library": "sawIntuitiveResearchKitDerivedTeleOperationPSM",
                "class-name": "mtsDerivedTeleOperationPSM",
                "constructor-arg": {
                    "Name": "MTMR-PSM2",
                    "Period": 0.001
                }
            }
            ,
            // to use ForceDimension
            {
                "shared-library": "sawForceDimensionSDK",
                "class-name": "mtsForceDimension",
                "constructor-arg": {
                    "Name": "ForceDimensionSDK"
                },
                "configure-parameter": "sawForceDimensionSDK-MTMR.json"
            }
        ]
    }
    ,
    "io": {
        "footpedals": "sawRobotIO1394-PSM2-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-27374.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM_GENERIC",
            "component": "ForceDimensionSDK",
            "interface": "MTMR"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            // this is where we tell the console to use our manually
            // loaded teleop, using "type"
            "type": "TELEOP_PSM_DERIVED",
            "mtm": "MTMR",
            "psm": "PSM2",
            "configure-parameter": {
                "ignore-jaw": true,
                "scale": 0.2,
                "rotation" : [[ 0.0000, -1.0000,  0.0000],
                              [ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
