/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            {
                "shared-library": "sawForceDimensionSDK",
                "class-name": "mtsForceDimension",
                "constructor-arg": {
                    "Name": "ForceDimensionSDK"
                },
                "configure-parameter": "sawForceDimensionSDK-MTMR.json"
            }
        ]
    }
    ,
    "io": {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-27374.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json" 
        }
        ,
        {
            "name": "MTMR",  // created previously using custom components
            "type": "MTM_GENERIC",
            "component": "ForceDimensionSDK",
            "interface": "MTMR"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            // this is where we tell the console to use our manually
            // loaded teleop, using
            "mtm": "MTMR",
            "psm": "PSM2",
            "configure-parameter": {
                "scale": 0.2,
                "rotation" : [[ 0.0000, -1.0000,  0.0000],
                              [ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
