/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            // to use derived teleop with force feedback
            {
                "shared-library": "sawIntuitiveResearchKitDerivedTeleOperationPSM",
                "class-name": "mtsDerivedTeleOperationPSM",
                "constructor-arg": {
                    "Name": "MTML-PSM1",
                    "Period": 0.001
                }
            }
            ,
            // to use ForceDimension
            {
                "shared-library": "sawForceDimensionSDK",
                "class-name": "mtsForceDimension",
                "constructor-arg": {
                    "Name": "ForceDimensionSDK"
                },
                "configure-parameter": "sawForceDimensionSDK-MTML.json"
            }
            ,
            {
                "shared-library": "sawKeyboard",
                "class-name": "mtsKeyboard",
                "constructor-arg": {
                    "Name": "Keyboard"
                }
                ,
                "configure-parameter": "sawKeyboard-dVRK-console.json"
            }
        ]
    }
    ,
    "console-inputs":
    {
        "operator-present": {
            "component": "Keyboard",
            "interface": "OperatorPresent" // see file keyboard-dVRK-console.json
        }
        ,
        "clutch": {
            "component": "Keyboard",
            "interface": "Clutch"
        }
        ,
        "camera": {
            "component": "Keyboard",
            "interface": "Camera"
        }
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-28007.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTML",  // created previously using custom components
            "type": "MTM_GENERIC",
            "component": "ForceDimensionSDK",
            "interface": "MTML"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            // this is where we tell the console to use our manually
            // loaded teleop, using
            "type": "TELEOP_PSM_DERIVED",
            "mtm": "MTML",
            "psm": "PSM1",
            "configure-parameter": {
                "scale": 0.2,
                "rotation" : [[ 0.0000, -1.0000,  0.0000],
                              [ 1.0000,  0.0000,  0.0000],
                              [ 0.0000,  0.0000,  1.0000]]
            }
        }
    ]
}
